PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1536, 864]
  color = $[1,1,1]
  expName = Matrix Reasoning
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Routines
  Routine instructions
    KeyboardComponent enter
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent practice_wais
      image = images/sample.jpg
      pos = (0, -110)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent instructions_1
      image = images/instr.jpg
      pos = (0, 350)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent correct_practice
      image = images/instr_corr.jpg
      opacity [set every repeat] = 0
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent A1
      fillColor = red
      opacity = 0
      pos = (-362,-317)
      saveStartStop = False
      shape = rectangle
      size = (175,175)
      startVal [time (s)] = 0.0
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    PolygonComponent A2
      fillColor = green
      opacity = 0
      pos = (-181, -317)
      saveStartStop = False
      shape = rectangle
      size = (175,175)
      startVal [time (s)] = 0.0
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    PolygonComponent A3
      fillColor = blue
      opacity = 0
      pos = (0, -317)
      saveStartStop = False
      shape = rectangle
      size = (175, 175)
      startVal [time (s)] = 0.0
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    PolygonComponent A4
      fillColor = purple
      opacity = 0
      pos = (181, -317)
      saveStartStop = False
      shape = rectangle
      size = (175,175)
      startVal [time (s)] = 0.0
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    PolygonComponent A5
      fillColor = pink
      opacity = 0
      pos = (362, -317)
      saveStartStop = False
      shape = rectangle
      size = (175,175)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
      Each Frame:
        if mouse.isPressedIn(A5):
                correct_practice.opacity = 1
    MouseComponent mouse
      clickable = A1, A2, A3, A4, A5
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine end
    TextComponent text
      color = black
      letterHeight = 20
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You have completed the task :)
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  Routine trials
    ImageComponent image_bottom
      image [set every repeat] = $imgpath_bottom
      pos = (0, -200)
      saveStartStop = False
      size = (913,191)
      startVal [time (s)] = 0.0
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    ImageComponent trials_image
      image [set every repeat] = $imgpath_top
      pos = (0,175)
      startVal [time (s)] = 0.0
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    PolygonComponent A1_2
      fillColor = red
      opacity = 0
      pos = (-362,-201)
      saveStartStop = False
      shape = rectangle
      size = (175,175)
      startVal [time (s)] = 0.0
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    PolygonComponent A2_2
      fillColor = green
      opacity = 0
      pos = (-181, -201)
      saveStartStop = False
      shape = rectangle
      size = (175,175)
      startVal [time (s)] = 0.0
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    PolygonComponent A3_2
      fillColor = blue
      opacity = 0
      pos = (0, -201)
      saveStartStop = False
      shape = rectangle
      size = (175, 175)
      startVal [time (s)] = 0.0
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    PolygonComponent A4_2
      fillColor = purple
      opacity = 0
      pos = (181, -201)
      saveStartStop = False
      shape = rectangle
      size = (175,175)
      startVal [time (s)] = 0.0
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    PolygonComponent A5_2
      fillColor = pink
      opacity = 0
      pos = (362, -201)
      saveStartStop = False
      shape = rectangle
      size = (175,175)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_trials
      clickable = A1_2, A2_2, A3_2, A4_2, A5_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        incorrectinrow = 0
      End Routine:
        if mouse_trials.clicked_name[0] == corrans:
            incorrectinrow = 0

        else:
            incorrectinrow += 1

        if incorrectinrow == 3:
            loop_trials.finished = True
Flow
  Routine instructions
  LoopInitiator loop_trials loopType="TrialHandler"
    conditionsFile = cond_images.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imgpath_top', 'images/img006.jpg'), ('imgpath_bottom', 'images/bbimg006.jpg'), ('corrans', 'A5_2')]),
      OrderedDict([('imgpath_top', 'images/img007.jpg'), ('imgpath_bottom', 'images/bbimg007.jpg'), ('corrans', 'A3_2')]),
      OrderedDict([('imgpath_top', 'images/img008.jpg'), ('imgpath_bottom', 'images/bbimg008.jpg'), ('corrans', 'A4_2')]),
      OrderedDict([('imgpath_top', 'images/img009.jpg'), ('imgpath_bottom', 'images/bbimg009.jpg'), ('corrans', 'A4_2')]),
      OrderedDict([('imgpath_top', 'images/img010.jpg'), ('imgpath_bottom', 'images/bbimg010.jpg'), ('corrans', 'A1_2')]),
      OrderedDict([('imgpath_top', 'images/img011.jpg'), ('imgpath_bottom', 'images/bbimg011.jpg'), ('corrans', 'A5_2')]),
      OrderedDict([('imgpath_top', 'images/img012.jpg'), ('imgpath_bottom', 'images/bbimg012.jpg'), ('corrans', 'A2_2')]),
      OrderedDict([('imgpath_top', 'images/img013.jpg'), ('imgpath_bottom', 'images/bbimg013.jpg'), ('corrans', 'A1_2')]),
      OrderedDict([('imgpath_top', 'images/img014.jpg'), ('imgpath_bottom', 'images/bbimg014.jpg'), ('corrans', 'A5_2')]),
      OrderedDict([('imgpath_top', 'images/img015.jpg'), ('imgpath_bottom', 'images/bbimg015.jpg'), ('corrans', 'A1_2')]),
      OrderedDict([('imgpath_top', 'images/img016.jpg'), ('imgpath_bottom', 'images/bbimg016.jpg'), ('corrans', 'A3_2')]),
      OrderedDict([('imgpath_top', 'images/img017.jpg'), ('imgpath_bottom', 'images/bbimg017.jpg'), ('corrans', 'A5_2')]),
      OrderedDict([('imgpath_top', 'images/img018.jpg'), ('imgpath_bottom', 'images/bbimg018.jpg'), ('corrans', 'A2_2')])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
    Routine trials
  LoopTerminator loop_trials
  Routine end
